OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Stop scenario when reaching
  "Experiment Stop"
Comment
  Stimulation Generation
  + Instructions display (arrows, crosses...)
Comment
  Signal recorder
Comment
  Signal Monitoring

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Signal stream, Input stream 2=#0.Stimulations -> Identity => #1
  0xac367a9c = 6
Input stream 1=#0.Experiment information, Input stream 2=#1.Output stream 1, Input stream 3=#1.Output stream 2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/EEG_data.ov
  Use compression = false
#1.Output stream 1 -> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Input stream 1=#3, Input stream 2=#1.Output stream 1, Input stream 3=#1.Output stream 2 -> Identity => #4
  0xac367a9c = 6
Data=#4.Output stream 1, Stimulations=#4.Output stream 3 -> Signal display "Filtered signals (1-40Hz)"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#4.Output stream 2, Stimulations=#4.Output stream 3 -> 0x341d3912 Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

Graz Motor Imagery BCI Stimulator => #8
  Lua Script = ${Player_ScenarioDirectory}/mi-stimulations.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 3
  Display Cue Duration (in sec) = 3
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulations=#8 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
