OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

Generic stream reader => #0
  Filename = C:/Users/arthur.desbois/Documents/dev/signals/sub14-ses03-GOOD/Test-[2022.05.05-16.30.16].ov
#0.Output stream 2 -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output stream 2 -> Common Average Reference => #3
Input stream 1=#3, Input stream 2=#0.Output stream 3 -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_GDF_Left
-> Channel Selector "CP3"
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = 0.25
  Epoch intervals (in sec) = 0.161
-> AutoRegressive Coefficients => #8
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
#8.PSD -> Frequency Band Selector
  Frequencies to select = 8:29
-> Spectrum Average
  Considers zeros = false
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 18
-> Feature aggregator => #12
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 1
  Stimulation 1 = OVTK_GDF_Right
-> Channel Selector "CP3"
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = 0.25
  Epoch intervals (in sec) = 0.161
-> AutoRegressive Coefficients => #16
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
#16.PSD -> Frequency Band Selector
  Frequencies to select = 8:29
-> Spectrum Average
  Considers zeros = false
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 18
-> Feature aggregator => #20
Stimulations=#4.Output stream 2, Features for class 1=#12, Features for class 2=#20 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = output_weights.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
