OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

Generic stream reader => #0
  Filename = C:/Users/arthur.desbois/Documents/dev/signals/sub14-ses03-GOOD/Test-[2022.05.05-16.30.16].ov
#0.Output stream 2 -> Channel Selector "C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4"
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.2
-> AutoRegressive Coefficients => #3
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
#3.PSD -> Frequency Band Selector
  Frequencies to select = 8:12
-> Alpha band
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = true
  Gain = 0.1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#3.PSD -> Frequency Band Selector
  Frequencies to select = 12:29
-> Beta band
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = true
  Gain = 0.1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#0.Output stream 2 -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
