OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

Generic stream reader => #0
  Filename = C:/Users/arthur.desbois/Documents/dev/signals/sub14-ses03-GOOD/Test-[2022.05.05-16.30.16].ov
#0.Output stream 2 -> Channel Selector "C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4" => #1
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.2
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #6
  Equation = log10(1+x)
Data=#6 -> Signal display "Alpha band power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 50
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#2, Stimulations=#0.Output stream 3 -> Signal display "Alpha band signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal Filter => #9
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 29
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.2
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #13
  Equation = log10(1+x)
Data=#13 -> Signal display "Beta band power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 50
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#9, Stimulations=#0.Output stream 3 -> Signal display "Beta band signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Output stream 2 -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_ExperimentStop
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
