OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Exp info=#0.Experiment information, Signal=#0.Signal stream, Input stream 3=#0.Stimulations -> 0x341d3912 Generic stream writer
  Filename = record-[$core{date}-$core{time}].ov
  Use compression = false

Generic stream reader => #2
  Filename = C:/Users/arthur.desbois/Documents/dev/signals/sub14-ses03-GOOD/Test-[2022.05.05-16.30.16].ov
#2.Output stream 2 -> Common Average Reference
-> Channel Selector "CP3"
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = 0.25
  Epoch intervals (in sec) = 0.161
-> AutoRegressive Coefficients => #6
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
#6.PSD -> Frequency Band Selector
  Frequencies to select = 10:15
-> Spectrum Average
  Considers zeros = false
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 18
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from =
Graz Motor Imagery BCI Stimulator => #12
  Lua Script = ${Player_ScenarioDirectory}/$var{MI_Stimulations}
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 3
  Display Cue Duration (in sec) = 3
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulations=#12, Amplitude=#11.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = false
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
