OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
Settings
  TimeEpochLength = 0.5
  TimeEpochShift = 0.4
  ArModelOrder = 19

0x341d3912 Generic stream reader => #0
  Filename = C:/Users/arthur.desbois/Documents/dev/signals/sub14-ses03-GOOD/Test-[2022.05.05-16.30.16].ov
#0.Output stream 2 -> 0x341d3912 Common Average Reference => #1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> 0x341d3912 Identity => #2
#2.Output stream 1 -> 0x341d3912 Channel Selector "CP3"
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Time based epoching
  Epoch duration (in sec) = 0.25
  Epoch intervals (in sec) = 0.161
-> 0x341d3912 AutoRegressive Coefficients => #5
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
#5.PSD -> 0x341d3912 Frequency Band Selector
  Frequencies to select = 10:15
-> 0x341d3912 Spectrum Average
  Considers zeros = false
-> 0x341d3912 Epoch average => #8
  Averaging type = Epoch block average
  Epoch count = 18
#2.Output stream 1 -> 0x341d3912 Channel Selector "CP3"
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Time based epoching
  Epoch duration (in sec) = 0.25
  Epoch intervals (in sec) = 0.161
-> 0x341d3912 AutoRegressive Coefficients => #11
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
#11.PSD -> 0x341d3912 Frequency Band Selector
  Frequencies to select = 8:29
-> 0x341d3912 Spectrum Average
  Considers zeros = false
-> 0x341d3912 Epoch average => #14
  Averaging type = Epoch block average
  Epoch count = 18
Input stream 1=#8, Input stream 2=#14 -> 0x341d3912 Feature aggregator => #15
#2.Output stream 1 -> 0x341d3912 Channel Selector "CP3"
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Time based epoching
  Epoch duration (in sec) = 0.25
  Epoch intervals (in sec) = 0.161
-> 0x341d3912 AutoRegressive Coefficients => #18
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
#18.PSD -> 0x341d3912 Frequency Band Selector
  Frequencies to select = 10:15
-> 0x341d3912 Spectrum Average
  Considers zeros = false
-> 0x341d3912 Epoch average => #21
  Averaging type = Epoch block average
  Epoch count = 18
#2.Output stream 1 -> 0x341d3912 Channel Selector "CP3"
  Channel List = CP3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Time based epoching
  Epoch duration (in sec) = 0.25
  Epoch intervals (in sec) = 0.161
-> 0x341d3912 AutoRegressive Coefficients => #24
  Order = 19
  PSD size = 500
  Detrend / DC removal = True
#24.PSD -> 0x341d3912 Frequency Band Selector
  Frequencies to select = 8:29
-> 0x341d3912 Spectrum Average
  Considers zeros = false
-> 0x341d3912 Epoch average => #27
  Averaging type = Epoch block average
  Epoch count = 18
Input stream 1=#21, Input stream 2=#27 -> 0x341d3912 Feature aggregator => #28
Stimulations=#2.Output stream 2, Features for class 1=#15, Features for class 2=#28 -> 0x341d3912 Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = output_weights.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

Generic stream reader => #31
  Filename = C:/Users/arthur.desbois/Documents/dev/signals/sub14-ses03-GOOD/Test-[2022.05.05-16.30.16].ov
#31.Output stream 2 -> Common Average Reference => #32
Input stream 1=#32, Input stream 2=#31.Output stream 3 -> Identity => #33
#33.Output stream 1 -> PowSpectrum Feature => #34
  SelectedChannel = CP3
  EpochDuration = 0.25
  EpochInterval = 0.161
  AROrder = 19
  PsdSize = 500
  FreqBand = 11
  EpochAvg = 18
#33.Output stream 1 -> PowSpectrum Feature => #35
  SelectedChannel = CP1
  EpochDuration = 0.25
  EpochInterval = 0.161
  AROrder = 19
  PsdSize = 500
  FreqBand = 10
  EpochAvg = 18
#33.Output stream 1 -> PowSpectrum Feature => #36
  SelectedChannel = CP1
  EpochDuration = 0.25
  EpochInterval = 0.161
  AROrder = 19
  PsdSize = 500
  FreqBand = 10
  EpochAvg = 18
Input stream 1=#34, Input stream 2=#36 -> Feature aggregator => #37
#33.Output stream 1 -> PowSpectrum Feature => #38
  SelectedChannel = CP3
  EpochDuration = 0.25
  EpochInterval = 0.161
  AROrder = 19
  PsdSize = 500
  FreqBand = 11
  EpochAvg = 18
Input stream 1=#38, Input stream 2=#35 -> Feature aggregator => #39
Stimulations=#33.Output stream 2, Features for class 1=#37, Features for class 2=#39 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = output_weights.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
