OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x9f5c4075 = PowSpectrum Feature
0xf6b2e3fa = Metabox/Signal Process
Settings
  SelectedChannel = CP3
  EpochDuration = 1
  EpochInterval = 1
  AROrder = 19
  PsdSize = 500
  FreqBand = 8:12
  EpochAvg = 18
Input Input 1 -> #0
Output Output 1 <- #5

Channel Selector => #0
  Channel List = $var{SelectedChannel}
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = $var{EpochDuration}
  Epoch intervals (in sec) = $var{EpochInterval}
-> AutoRegressive Coefficients => #2
  Order = $var{AROrder}
  PSD size = $var{PsdSize}
  Detrend / DC removal = True
#2.PSD -> Frequency Band Selector
  Frequencies to select = $var{FreqBand}
-> Spectrum Average
  Considers zeros = false
-> Epoch average => #5
  Averaging type = Epoch block average
  Epoch count = $var{EpochAvg}
